CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<SampleID>N[0-9]+)_(?P<ImageType>[A-Za-z]+)\.(?P<FileExtension>[a-z]+)$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:AP_liver_unmasked
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:1
    Select the input color image:AP_liver_unmasked
    Name the output image:BKG
    Stain:Custom
    Red absorbance:0.431515
    Green absorbance:0.609995
    Blue absorbance:0.664605

Threshold:[module_num:6|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
    Select the input image:BKG
    Name the output image:BKGThreshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RemoveHoles:[module_num:7|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
    Select the input image:BKGThreshold
    Name the output image:BKGremoveholes
    Size of holes to fill:30

ReduceNoise:[module_num:8|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
    Select the input image:BKGremoveholes
    Name the output image:BKGReduceNoise
    Size:50
    Distance:25
    Cut-off distance:0.3

Threshold:[module_num:9|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
    Select the input image:BKGReduceNoise
    Name the output image:BKGBinary
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:10|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
    Select the input image:BKGBinary
    Name the output object:TissueObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:TissueObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:12|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
    Measure the area occupied by:Objects
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    Select object sets to measure:TissueObjects

CalculateMath:[module_num:13|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
    Name the output measurement:TissueObjects_PercentArea
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:TissueObjects
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_TotalArea_TissueObjects
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:14|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
    Select the objects to filter:TissueObjects
    Name the output objects:AP_liverobject
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Math_TissueObjects_PercentArea
    Filter using a minimum measurement value?:Yes
    Minimum value:0.25
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:15|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
    Select the input image:AP_liver_unmasked
    Name the output image:AP_liver
    Use objects or an image as a mask?:Objects
    Select object for mask:AP_liverobject
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    Invert the mask?:No

UnmixColors:[module_num:16|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
    Stain count:2
    Select the input color image:AP_liver
    Name the output image:AP_binary
    Stain:Custom
    Red absorbance:0.4374
    Green absorbance:0.683165
    Blue absorbance:0.584779
    Name the output image:AP_bkg
    Stain:Custom
    Red absorbance:0.434541
    Green absorbance:0.640396
    Blue absorbance:0.633299

Threshold:[module_num:17|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
    Select the input image:AP_bkg
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RescaleIntensity:[module_num:18|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
    Select the input image:AP_binary
    Name the output image:AP_binary_rescale
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:19|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
    Select the input image:AP_binary_rescale
    Name the output image:AP_binary_GaussianFilter
    Sigma:1

ReduceNoise:[module_num:20|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
    Select the input image:AP_binary_GaussianFilter
    Name the output image:AP_ReduceNoise
    Size:10
    Distance:15
    Cut-off distance:0.2

EnhanceOrSuppressFeatures:[module_num:21|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
    Select the input image:AP_ReduceNoise
    Name the output image:AP_SuppressFeatures
    Select the operation:Suppress
    Feature size:5
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
Threshold:[module_num:22|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
    Select the input image:AP_SuppressFeatures
    Name the output image:AP_Threshold_Adaptive
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.075
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:23|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
    Select the input image:AP_SuppressFeatures
    Name the output image:AP_Threshold_Global
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.075
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:24|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
    Select the input image:AP_SuppressFeatures
    Name the output image:AP_Threshold_Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.075
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.5
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:AP_Threshold_Adaptive
    Select method for constructing file names:From image filename
    Select image name for file prefix:AP_liver_unmasked
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Threshold_adaptive
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:AP_Threshold_Global
    Select method for constructing file names:From image filename
    Select image name for file prefix:AP_liver_unmasked
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Threshold_global
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:AP_Threshold_Robust
    Select method for constructing file names:From image filename
    Select image name for file prefix:AP_liver_unmasked
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Threshold_robust
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:28|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
    Select object sets to measure:AP_liverobject
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:29|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:AP_Threshold_Adaptive, AP_Threshold_Global, AP_Threshold_Robust
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
CalculateMath:[module_num:30|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
    Name the output measurement:PercentArea_AP_Adaptive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_AP_Threshold_Adaptive
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:AP_liverobject
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:31|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
    Name the output measurement:PercentArea_AP_Global
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_AP_Threshold_Global
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:AP_liverobject
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:32|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
    Name the output measurement:PercentArea_AP_Robust
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_AP_Threshold_Robust
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:AP_liverobject
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_ImageType,Image|Metadata_SampleID,Image|AreaOccupied_AreaOccupied_AP_Threshold_Global,Image|AreaOccupied_AreaOccupied_AP_Threshold_Robust,Image|AreaOccupied_AreaOccupied_AP_Threshold_Adaptive,Image|AreaOccupied_TotalArea_AP_Threshold_Robust,Image|AreaOccupied_TotalArea_AP_Threshold_Global,Image|AreaOccupied_TotalArea_AP_Threshold_Adaptive,Image|FileName_AP_liver_unmasked,Experiment|Pipeline_Pipeline,AP_liverobject|AreaShape_Area,AP_liverobject|Math_PercentArea_AP_Robust,AP_liverobject|Math_PercentArea_AP_Global,AP_liverobject|Math_PercentArea_AP_Adaptive
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Results_
    Overwrite existing files without warning?:No
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